/* Macro for manually outlining objects of interest in images
 *  Olivier Burri, Romain Guiet May 03 2013
 *  Updated July 2014
 *  EPFL - SV - PTECH - PTBIOP
 *  http://biop.epfl.ch
*/


requires("1.38m");
// Minimal version because we use "Detect Right Click" 
// utility from Wayne's Macro Language. 

// Action Bar settings
sep = File.separator;

// Install the BIOP Library
call("BIOP_LibInstaller.installLibrary", "BIOP"+sep+"BIOPLib.ijm");


run("Action Bar","jar:file:BIOP/BIOP_MultiManual_Select.jar!/BIOP_MultiManual_Select.ijm");
//run("Action Bar","/plugins/ActionBar/BIOP_MultiManual_Select.ijm");

exit();

//Start of ActionBar

<codeLibrary>

function toolName() {
	return "MultiManual Selector";
}


/*
 * Fancier functions used to draw ROIs on the graphics tablet. This uses the 
 * 'DisablePopupMenu' option for when right-clicking on an image
 * Stupid thing: It cannot undertand the 'right click' or any click from the 
 * graphic tablet's input, so the user must click with the mouse. More tests should be done.
 */

function buildSettings() {
	// Get the number of categories and Their Names
	catNum = parseInt(getData("Categories"));
	cat = getNumber("How Many Categories?",catNum);
	setData("Categories", cat);
	colorArray = newArray("White","Red","Green","Blue","Yellow","Cyan","Magenta");
	Dialog.create("Name "+cat+" Categories");
	for (i=1; i<=cat; i++) {
		categoryName = getData("Category #"+(i));
		Dialog.addString("Category #"+i, categoryName);
		colorROI = getData("Color for "+categoryName);
		if (colorROI == ""){
			colorROI = colorArray[0];
		} 
		Dialog.addChoice("Category #"+(i)+" color", colorArray,colorROI);
	}
	strokeWidth = getDataD("Stroke width",3);
	Dialog.addNumber("Stroke width", strokeWidth);
	Dialog.show();
	
	for (i=1; i<=cat; i++) {
		catname = Dialog.getString();
		setData("Category #"+i, catname);
		categoryColor = Dialog.getChoice();
		setData("Color for "+catname,categoryColor);
	}
	strokeWidth = Dialog.getNumber();
	setData("Stroke width", strokeWidth);
	reColorRois();
}

function reColorRois(){
	n 	= roiManager("Count");
	
	for (i=0; i<n; i++) {
		roiManager("Select", i);
		currentRoiName = Roi.getName;
		category = substring(currentRoiName, 0, lastIndexOf(currentRoiName,"#")-1);
		// retrieve the color
		colorROI 	= getData("Color for "+category);
		strokeWidth	=	getData("Stroke width");
			
		if (colorROI != "") { // if the category exists
			Roi.setStrokeColor(colorROI);
			roiManager("Update");
		}
	}
}


function measureCurrentImage() {
	imageName=getTitle();
	getDimensions(imageWidth, imageHeight, channels, slices, frames);
	getVoxelSize(pixelWidth, pixelHeight, pixelDepth, unit);
	
	nCats = parseInt(getData("Categories"));
	
	newImage(imageName+"-ROIs", "8-bit black", imageWidth, imageHeight, nCats);
	run("Make Composite", "display=Composite");
	setVoxelSize(pixelWidth, pixelHeight, pixelDepth, unit);

	// color to fill ROI with
	color = 125;	
	setForegroundColor(color, color, color);
	// Now go through the ROIs and color them
	n 			= roiManager("Count");
	currentCat 	= "*none*";
	catNum		= 0;
	// create an array to store colors of the ROI	
	colorArray	= newArray(nCats);
	colorIndex 	= 0;
	
	for (i=0; i<n; i++) {
		roiManager("Select", i);
		currentRoiName = Roi.getName;
		cat = substring(currentRoiName, 0, lastIndexOf(currentRoiName,"#")-1);
		// retrieve the color
		colorChannel = getData("Color for "+cat);
		//print(colorChannel);
		
		if (cat != currentCat) { // if the category change, store the color
			colorArray[colorIndex] = colorChannel;
			colorIndex++;	
			currentCat = cat;
			catNum++;
		}
		setSlice(catNum);
		run("Fill", "slice");
		run("Measure");
		setResult("Cat Number", nResults-1, catNum);
	}
	changeLUTs(colorArray);
	// add the original image as an overlay
	run("Add Image...", "image="+imageName+" x=0 y=0 opacity=60 zero");
}

function changeLUTs(arrayOfLUT){
	// for each channel 'n' of an image 
	// will use the LUT specified in the arrayOfLUT[channelIndex-1]
	getDimensions(imageWidth, imageHeight, channels, slices, frames);
	for(channelIndex=1; channelIndex <= channels; channelIndex++){
		if((arrayOfLUT[channelIndex-1] == "0")||(arrayOfLUT[channelIndex-1] == "")||(arrayOfLUT[channelIndex-1] == "White")){
			Stack.setChannel(channelIndex);
			run("Grays");
		}else{
			Stack.setChannel(channelIndex);
			run(arrayOfLUT[channelIndex-1]);
		}
	}
}




function buildSettingsCounter() {
	// Get the number of categories and Their Names
	totalCounterNbr = parseInt(getData("Counters"));
	counter 		= getNumber("How Many Counters?",totalCounterNbr);
	setData("Counters", counter);
	
	counterNameArray = newArray("P","G");
	counterNbrArray = newArray(9,5);
	
	Dialog.create("Name "+counter+" Counter");
	for (i=1; i<=counter; i++) {
		counterName = getData("Counters"+(i));
		if ( (counterName == "") && (i <= lengthOf(counterNameArray) ) ){
			counterName = counterNameArray[i-1];
		}
		Dialog.addString("Counter #"+i, counterName);
		counterNbr 	= getData("Counter #"+i+" nbr");
		if ( (counterNbr == "") && (i <= lengthOf(counterNbrArray) ) ){
			counterNbr = counterNbrArray[i-1];
		}
		Dialog.addNumber("Counter #"+i+" nbr", counterNbr);
	}
	Dialog.show();
	
	for (i=1; i<=counter; i++) {
		counterName = Dialog.getString();
		setData("Counter #"+i, counterName);
		counterNbr = Dialog.getNumber();
		setData("Counter #"+i+" nbr",counterNbr);
	}
}


function analyseCounterTextFile(){
	// parameters from parameters window detected
	pathName   		= getData("Image Folder");
	totalCounterNbr = parseInt(getData("Counters"));
	// parameters automatically detected
	imageName					= getTitle();
	//imageNameNoExt				= File.nameWithoutExtension;
	imageNameNoExt				= substring(imageName,0,(indexOf(imageName, "tif")-1));
	//print(imageNameNoExt);
	getDimensions(imageWidth, imageHeight, channels, slices, frames);

	if (isOpen("Results")){
		firstRow = nResults;
		IJ.renameResults("Results", "Temp");
	}else{
		
		for (counterIndex = 1 ; counterIndex <= totalCounterNbr ; counterIndex++){
		
			counterName = getData("Counter #"+counterIndex);
		//	print(counterName);
			counterNbr 	= getData("Counter #"+counterIndex+" nbr");
		//	print(counterNbr);
			for (index = 0 ; index < counterNbr; index++){
				columnName = counterName+(index+1);						
				setResult(columnName,0,0);
			}
		}
	//	updateResults;
		IJ.renameResults("Results", "Temp");
		firstRow = 0 ;
	}

	for (counterIndex = 1 ; counterIndex <= totalCounterNbr ; counterIndex++){
		counterName = getData("Counter #"+counterIndex);
	//	print(counterName);
		counterNbr 	= getData("Counter #"+counterIndex+" nbr");
	//	print(counterNbr);
		countInsideAndFillResultTable(counterName	,counterNbr,firstRow);
	}

	IJ.renameResults("Temp", "Results");
	updateResults;
}

function countInsideAndFillResultTable(typeIdentifier,maxValue,firstRow){
	// open imageName_CounterPhenotype.txt (rfom cell counter) counting the different phenotype observed in image imageName
	// open the corresponding counter table	
	//run("Clear Results");
	//print(imageNameNoExt);
	//print(pathName+imageNameNoExt+"_"+typeIdentifier+".txt");
	run("Results... ", "open=["+pathName+imageNameNoExt+"_"+typeIdentifier+".txt]");
	updateResults();
	resultsLength 			=  nResults;
	//################################################################ get coord(x,y) and phenotype Nbr from  the results Table:
	xCoord 					= newArray(resultsLength);
	yCoord 					= newArray(resultsLength);
	typeNbr					= newArray(resultsLength); 
	for (rowIndex = 0; rowIndex < resultsLength ; rowIndex++ ){
		xCoord [rowIndex] 	= getResult("X"		, rowIndex);
		yCoord [rowIndex]	= getResult("Y"		, rowIndex);
		typeNbr[rowIndex]	= getResult("Type"	, rowIndex);
	}
	
	//run("Clear Results");
	
	IJ.renameResults("Temp", "Results");
	rowCounter = firstRow;
	
	for (roiIndex = 0 ; roiIndex<roiManager("count");roiIndex++){		// For all the ROIs
		roiManager("Select", roiIndex);									// select the ROI roiIndex
		setResult("Label", rowCounter,imageNameNoExt+":"+Roi.getName);	// write the results in the table
		setResult("Count", rowCounter,1);								// colum to retrieve the total count of each category
		
		countInsideCurrent = newArray(maxValue);						// create a an array, to add total number of each type per ROI
		
		for (indexContains = 0; indexContains < lengthOf(xCoord); indexContains++ ){								// for each cursor poistion at (x,y)
			if (Roi.contains(xCoord[indexContains], yCoord[indexContains]))			{								// if it contained inside the current ROI, 
				countInsideCurrent[(typeNbr[indexContains]-1)] = countInsideCurrent[(typeNbr[indexContains]-1)] + 1;//increases the corresponding Phenotype counter
			}
		}
		
		for (index = 0 ; index < maxValue; index++){					// write the results in the table
			type = typeIdentifier+(index+1);	
			setResult(type,rowCounter,countInsideCurrent[index]);	
		}
		
		rowCounter++;
	}
	IJ.renameResults("Results", "Temp");
}	

/*
 * Code to procedurally create an ActionBar to manage categories individually, if needed.  
 * 
 */
function makeABSelManager() {

	sep = File.separator;
	path = getDirectory("plugins");
	
	nCat= parseInt(getData("Categories"));
	catNames = newArray(nCat);
	for (i=0; i<nCat; i++) {
		cat = getData("Category #"+(i+1));
		catNames[i] = cat;
	}
	
	String.resetBuffer;
	// import codeLibrary
	txt = getCodeLibSelector();
	String.append("<codeLibrary>\n"+txt+"\n"+"</codeLibrary>\n");
	
	for (i=0; i<nCat; i++) {
		// Make the buttons
		String.append("<line>\n");
		String.append("<button>\n");
		String.append("label="+catNames[i]+ " Add\n");
		String.append("icon=noicon\n");
		String.append("arg=<macro>\n");
		String.append(addMacro(catNames[i]));
		String.append("</macro>\n");
	
		String.append("<button>\n");
		String.append("label="+catNames[i]+ " Remove\n");
		String.append("icon=noicon\n");
		String.append("arg=<macro>\n");
		String.append(delMacro(catNames[i]));
		String.append("</macro>\n");
	
		String.append("<button>\n");
		String.append("label="+catNames[i]+ " Batch\n");
		String.append("icon=noicon\n");
		String.append("arg=<macro>\n");
		String.append(batchFolderMacro(catNames[i]));
		String.append("</macro>\n");
	
		
		String.append("</line>\n");
	}
	
	File.makeDirectory(path+"ActionBar"+sep+"selector"+sep);
	fullPath = path+"ActionBar"+sep+"selector"+sep+"Selector.ijm";
	
	File.saveString(String.buffer, fullPath);
	
	run("Action Bar","plugins/ActionBar/selector/Selector.ijm");

}

function addMacro(catName){
	return "DrawRoisL(\""+catName+"\");\n"+"saveRois(\"Open\");\n");
}

function delMacro(catName){
	txt = "idx = findRoisWithName(\""+catName+".*\");"+"\n";
	txt +="roiList = newArray(idx.length+1);"+"\n";
	txt +="roiList[0] = \"None\";"+"\n";
	txt +="for (i=0; i<idx.length; i++) {"+"\n";
	txt +="	roiManager(\"Select\", idx[i]);"+"\n";
	txt +="	roiList[i+1] = Roi.getName();"+"\n";
		
	txt +="}"+"\n";
	txt +="Dialog.create(\"Select ROI to Delete\");"+"\n";
	txt +="Dialog.addChoice(\"ROI Name\", roiList, roiList[0]);"+"\n";
	txt +="Dialog.show();"+"\n";

	txt +="toDel = Dialog.getChoice();"+"\n";
	txt +="if(toDel != \"None\") {"+"\n";
	txt +="	idx2 = findRoiWithName(toDel);"+"\n";
	txt +="	roiManager(\"Select\", idx2);"+"\n";
	txt +="	roiManager(\"Delete\");"+"\n";
	txt +="	// Now move every object up"+"\n";
	txt +="	roiNum = parseInt(substring(toDel, lastIndexOf(toDel, \"#\")+1));"+"\n";
	txt +="	if(roiNum != idx.length) {"+"\n";
	txt +="		for(i=roiNum; i<idx.length; i++) {"+"\n";
	txt +="			roiManager(\"Select\", idx[i-1]);"+"\n";
	txt +="			roiManager(\"Rename\", \""+catName+" #\"+i);"+"\n";
	txt +="		}"+"\n";
	txt +="	}"+"\n";
	txt +="}"+"\n";

	return txt;
}

function batchFolderMacro(category) {
	txt ="nI = getNumberImages();"+"\n";
	txt +="for (i=0; i<nI; i++) {"+"\n";
	txt +="roiManager(\"reset\");"+"\n";
	txt +="openImage(i);"+"\n";
	txt +="DrawRoisL(\""+category+"\");"+"\n";
	txt +="wait(200);"+"\n";
	txt +="//Save ROIs"+"\n";
	txt +="saveRois(\"Open\");"+"\n";
	txt +="//Close the image before going to the next one"+"\n";
	txt +="close();"+"\n";
	txt +="}"+"\n";
	return txt;
}

function getCodeLibSelector() {
txt ="function toolName() {"+"\n";
txt +="	return \"MultiManual Selector\";"+"\n";
txt +="}"+"\n";
return txt;
}
</codeLibrary>
<text><html><font size=2 color=#66666f> ---------------------------------------Parameters
<line>
<button>
label=Save
arg=<macro>
saveParameters();
</macro>

<button>
label=Load
arg=<macro>
loadParameters();
</macro>
</line>




<text><html><font size=2 color=#66666f> ---------------------------------------------Select

<line>
<button>
label= Folder
icon=noicon
arg=<macro>
//Open the file and parse the data
openParamsIfNeeded();
setImageFolder("Select Working Folder");
</macro>
</line>

<line>
<button>
label= Image
icon=noicon
arg=<macro>
selectImageDialog();
</macro>
</line>

<text><html><font size=2 color=#66666f> ---------------------------------------Draw ROIs


<line>
<button>
label=Settings
icon=noicon
arg=<macro>
buildSettings();
makeABSelManager();
</macro>
</line>

<line>
<button>
label= on current Image
icon=noicon
arg=<macro>
nRois = parseInt(getData("Categories"));
// Draw the ROIs and stop when the user presses "ALT"
for (i=1; i<=nRois; i++) {
	category = getData("Category #"+i);
	DrawRoisL(category);
	wait(1000);
}

// Then save the ROIs right away.
saveRois("Open");
</macro>
</line>


<line>
<button>
label=Save image (+ ROI)
icon=noicon
arg=<macro>
saveCurrentImage();
//Saves the ROI Set with the name of the current image
saveRois("Open");
</macro>

<button>
label=Clear ROIs
icon=noicon
arg=<macro>
roiManager("Reset");
</macro>
</line>

<line>
<button>
label= on current Folder
icon=noicon
arg=<macro>
nI = getNumberImages();
for (i=0; i<nI; i++) {
	roiManager("reset");
	openImage(i);
	nRois = parseInt(getData("Categories"));
	// Draw the ROIs and stop when the user presses "ALT"
	for (j=1; j<=nRois; j++) {
		category = getData("Category #"+j);
		DrawRoisL(category);
		wait(1000);
	}

	//Save ROIs
	saveRois("Open");

	//Close the image before going to the next one
	close();
}
</macro>
</line>

<text><html><font size=2 color=#66666f> ------------------------------------------Measure
<line>
<button>
label= on current Image
icon=noicon
arg=<macro>
measureCurrentImage();

</macro>
</line>
<line>
<button>
label= on current Folder
icon=noicon
arg=<macro>
run("Clear Results");
nI = getNumberImages();
for (i=0; i<nI; i++) {
	roiManager("reset");
	openImage(i);
	n= roiManager("Count");
	if (n>0) {
		measureCurrentImage();
	
		saveCurrentImage();
		//DrawROIs
		saveRois("Save");
	}
	//Close the image before going to the next one
	close();
}
</macro>
</line>

<text><html><font size=2 color=#66666f> -----------------------------------------Counter
<line>
<button>
label=start manual counter
icon=noicon
arg=<macro>
run("Cell Counter","");
</macro>
</line>

<text><html><font size=2 color=#66666f> -----------------------------------------Analyse
<line>
<button>
label=Settings
icon=noicon
arg=<macro>
buildSettingsCounter();
</macro>
</line>


<line>
<button>
label=current Image
icon=noicon
arg=<macro>
analyseCounterTextFile();
</macro>
</line>


<line>
<button>
label= current Folder
icon=noicon
arg=<macro>
run("Clear Results");
nI = getNumberImages();
for (i=0; i<nI; i++) {
	roiManager("reset");
	openImage(i);
	n= roiManager("Count");
	if (n>0) {
		analyseCounterTextFile();
	
		saveCurrentImage();
		//DrawROIs
		saveRois("Save");
	}
	//Close the image before going to the next one
	close();
}

path = getSaveFolder();
if (isOpen("Results")){
	selectWindow("Results");
	saveAs("Results", path+"Results_Analyse.txt");
}

</macro>
</line>


<text><html><font size=2 color=#66666f> -------------------------------------------Help
<line>
<button>
label=BIOP website
icon=noicon
arg=<macro>
biopUrl = "http://biop.epfl.ch/index.php/";
run("URL...", "url="+biopUrl);
</macro>
</line>
